PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1366, 768]
  expName = word_priming
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
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      text [set every repeat]:
        $study_word
    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'phone'},
      {'study_word': 'marble'},
      {'study_word': 'board'},
      {'study_word': 'laptop'},
      {'study_word': 'Chart'},
      {'study_word': 'T-shirt'},
      {'study_word': 'mousw'},
      {'study_word': 'Pastry'},
      {'study_word': 'Case'},
      {'study_word': 'Cruise'},
      {'study_word': 'Police'},
      {'study_word': 'Keys'},
      {'study_word': 'Poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': 'L_pt_p'},
      {'test': 'c_ha_t'},
      {'test': 't_hi_t'},
      {'test': '_ou_e'},
      {'test': 'P_st_y'},
      {'test': 'C_s_'},
      {'test': '_ru_s_'},
      {'test': 'P_li_e'},
      {'test': 'K_y_'},
      {'test': 'P_s_er'},
      {'test': '_o_rd'},
      {'test': '_a_bl_'},
      {'test': '_ho_e'},
      {'test': '_oo_'},
      {'test': 'C_s_io_'},
      {'test': 'ta_l_'},
      {'test': 'p_nc_l'},
      {'test': 'v_s_'},
      {'test': 'bo_t_e'},
      {'test': 'c_m_ra'}]
    Routine test
  LoopTerminator trials_2
