PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1366, 768]
  expName = FinalProject
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine instructions
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    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Before we begin with the experiment, I would like to assure you, no personal information shall be collected or used anywhere. Your results in this experiment shall be used solely for academic purposes.
        I also want to clarify that you can back out at any given moment with no questions being asked. If you do back out, none of your data shall be used.
        If you still wish to continue, please press the button below.
    TextComponent go_ahead
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Go Ahead
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    MouseComponent mouse
      clickable = go_ahead
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine math
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    TextComponent MATHSUM
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Problem
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    TextComponent option1
      letterHeight = 0.05
      pos = (-0.4, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Option1
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    TextComponent option2
      letterHeight = 0.05
      pos = (0.4, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Option2
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    TextComponent option3
      letterHeight = 0.05
      pos = (-0.4, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Option3
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    TextComponent option4
      letterHeight = 0.05
      pos = (0.4, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Option4
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'a','b','c','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Feedback
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        # Randomly choose one of two feedback messages
        if random.choice([True, False]):
            feedback_message = (
                "Since you performed excellently in the arithmetic reasoning. "
                "We expect great results from your memory component as well! "
                "We believe in you, do well. Click your space button to continue!!"
            )
        else:
            feedback_message = (
                "Unfortunately, your arithmetic reasoning was below average. "
                "We shall now proceed into the memory component. "
                "Click your space button to continue."
            )
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback_message
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine MemoryTest
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    TextComponent Words
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 40
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      text:
        Journey    Harmony    Modify    Respect    Mystery
        Talent     Imagine    Honest    Prepare    Success
        Clever     Victory    Justice   Effort     Genuine
        Feature    Delight    Unique    Wander     Curious
        Measure    Forgive    Achieve   Inspire    Elegant
    TextboxComponent RecallWords
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 40
      stopVal [duration (s)] = 90
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    PolygonComponent endit
      fillColor = white
      ori = 90
      pos = (0.5, 0)
      shape = arrow
      size = (0.1, 0.1)
      startVal [time (s)] = 40
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    MouseComponent mouse_2
      clickable = endit
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = math_problems_condition_file.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Problem': '9876 × 32 = ?', 'Option1': 'a)316032', 'Option2': 'b)315000', 'Option3': 'c)317010', 'Option4': 'd)314900', 'Correct_Answer': 'a'},
      {'Problem': '12345 + 67890 = ?', 'Option1': 'a)79235', 'Option2': 'b)80235', 'Option3': 'c)81245', 'Option4': 'd)78210', 'Correct_Answer': 'b'},
      {'Problem': '25 × 54321 = ?', 'Option1': 'a)1358025', 'Option2': 'b)1250000', 'Option3': 'c)1345210', 'Option4': 'd)1360500', 'Correct_Answer': 'a'},
      {'Problem': '98765 + 12345 = ?', 'Option1': 'a)100000', 'Option2': 'b)110000', 'Option3': 'c)111110', 'Option4': 'd)112120', 'Correct_Answer': 'c'},
      {'Problem': '4321 × 43 = ?', 'Option1': 'a)185000', 'Option2': 'b)185803', 'Option3': 'c)186432', 'Option4': 'd)184210', 'Correct_Answer': 'b'},
      {'Problem': '56789 + 23456 = ?', 'Option1': 'a)79245', 'Option2': 'b)80245', 'Option3': 'c)81245', 'Option4': 'd)78245', 'Correct_Answer': 'b'},
      {'Problem': '1234 × 56 = ?', 'Option1': 'a)68000', 'Option2': 'b)69104', 'Option3': 'c)70000', 'Option4': 'd)67500', 'Correct_Answer': 'b'},
      {'Problem': '34567 + 76543 = ?', 'Option1': 'a)111000', 'Option2': 'b)111110', 'Option3': 'c)112000', 'Option4': 'd)110500', 'Correct_Answer': 'b'},
      {'Problem': '876 × 21 = ?', 'Option1': 'a)18200', 'Option2': 'b)18396', 'Option3': 'c)18500', 'Option4': 'd)18300', 'Correct_Answer': 'b'},
      {'Problem': '23456 × 89 = ?', 'Option1': 'a)2087500', 'Option2': 'b)2087584', 'Option3': 'c)2090000', 'Option4': 'd)2085000', 'Correct_Answer': 'b'}]
    Routine math
  LoopTerminator trials_2
  Routine Feedback
  Routine MemoryTest
